////////////
// Constants
deg2rad = 1/DEG

// run name string
objref run_name
run_name = new String()
{ sprint(run_name.s, "test") }

// Yes No output
objref NoYes
{	NoYes = new List()
	NoYes.append(new String("NO"))
	NoYes.append(new String("YES"))
}

////////////
/* MATLAB variable showing the order of parameters
	Params = [  simulation.cell_model_id; ...
                simulation.replace_axon; ...
                simulation.prune_axon; ...
                simulation.myelinate_axon; ...
                simulation.modify_axon; ...
                simulation.scale_axon_diam; ...
                simulation.scale_mainaxon_diam; ...
                simulation.scale_apic_diam; ...
                simulation.scale_basal_diam; ...
                simulation.scale_soma_area; ...
                simulation.scale_basal_L; ...
                simulation.min_myelin_diam; ...
                simulation.max_myelin_order; ...
                simulation.ss_init; ...
                simulation.v_init; ...
                simulation.temp; ...
                simulation.dt; ...
                simulation.record_dt; ...
                simulation.t_stop; ...
                simulation.cmprt; ...
                E_field.E1.amp; ...
                E_field.E1.theta; ...
                E_field.E1.phi; ...
                E_field.E2.theta; ...
                E_field.E2.phi; ...
                E_field.min_spike_num;
                E_field.t_ss_start; ...
                E_field.t_ss_end; ...
                I_inj.st_amp; ...
                I_inj.st_del; ...
                I_inj.st_dur; ...
                I_inj.st_mode ...
                ];*/
// getParams.hoc variables
cell_id = 0
replace_ax = 0
prune_ax = 0
myelinate_ax = 0
mod_ax = 0
scale_ax = 1
scale_mainax = 1
scale_apic_diam = 1
scale_basal_diam = 1
scale_soma_area = 1
scale_basal_L = 1
min_myelinD = 0
max_myelin_order = 0
ss_init = 1
//v_init
temp = 37
//dt
record_dt = 0.025
//tstop
cmprt = 1			// cmprt for finding threshold: 1-4 = 'soma','term','AIS','node0'
AMP = 1				// initial amplitude of E-field 1
theta1 = 180
phi1 = 0
theta2 = 90 		// orientation of E-field 2
phi2 = 180
min_spike_num = 1
t_ss_start = 750	// start of steady state for counting spikes
t_ss_end = 4750
st_amp = 0 		// for IClamp 
st_del = 0
st_dur = 0
st_mode = 1 	// current injection mode


//synaptic parameters
n_synapses = 55
objref synapse_file_name, synapse_file, synapse_mat, active_pre_mtypes, pre_mtype_freqs
synapse_file_name = new String()
synapse_file = new File()
synapse_mat = new Matrix()
active_pre_mtypes = new Vector()
pre_mtype_freqs = new Vector()


////////////
// interp_coordinates.hoc variables objects
// coordinate file directory
objref current_dir
{current_dir = new String()}
current_dir.s = getcwd()

objref secrefs		// list containing section references
numSect = 0 		// set to 0 if nothing has been run 
numComp = 0 		// set to 0 if nothing has been run 
resave = 1 			// set to 1 to save a new coordinates file to coordinates.txt
	
objref xList, yList, zList

////////////
// cell_chooser.hoc
objref cell, nil				// 
objref main_ax_list  			// defines main_ax_list and term_ind (public variable)
objref st						// current stimulation
cell_rotated = 0
synapses_enabled = 0
term_ind = 0 					// index for main axon terminal, initialize to 0 
AIS_ind = 0						// index for first axon compartment (axon[0], which is the initial segment	
node_ind = 0					// index for first node, which is separated from AIS by one internode

objref cmprt_str
{	cmprt_str = new List()
	cmprt_str.append(new String("soma"))
	cmprt_str.append(new String("terminal"))
	cmprt_str.append(new String("AIS"))
	cmprt_str.append(new String("node0"))
}


objref cell_name_list
cell_name_list = new List()

objref cell_name_str
cell_name_str = new String()
for ii = 1,55 { getstr(cell_name_str.s,1) cell_name_list.append(cell_name_str) cell_name_str = new String()}
L23_PC_cADpyr229_1	
L23_PC_cADpyr229_2
L23_PC_cADpyr229_3
L23_PC_cADpyr229_4
L23_PC_cADpyr229_5
L5_UTPC_cADpyr232_1
L5_UTPC_cADpyr232_2
L5_UTPC_cADpyr232_3
L5_UTPC_cADpyr232_4
L5_UTPC_cADpyr232_5
L4_LBC_cACint209_1
L4_LBC_cACint209_2
L4_LBC_cACint209_3
L4_LBC_cACint209_4
L4_LBC_cACint209_5
L5_TTPC2_cADpyr232_1
L5_TTPC2_cADpyr232_2
L5_TTPC2_cADpyr232_3
L5_TTPC2_cADpyr232_4
L5_TTPC2_cADpyr232_5
L4_PC_cADpyr230_1
L4_PC_cADpyr230_2
L4_PC_cADpyr230_3
L4_PC_cADpyr230_4
L4_PC_cADpyr230_5
L1_NGC-DA_bNAC219_1
L1_NGC-DA_bNAC219_2
L1_NGC-DA_bNAC219_3
L1_NGC-DA_bNAC219_4
L1_NGC-DA_bNAC219_5
L1_SLAC_cNAC187_1
L1_SLAC_cNAC187_2
L1_SLAC_cNAC187_3
L1_SLAC_cNAC187_4
L1_SLAC_cNAC187_5
L6_TPC_L4_cADpyr231_1
L6_TPC_L4_cADpyr231_2
L6_TPC_L4_cADpyr231_3
L6_TPC_L4_cADpyr231_4
L6_TPC_L4_cADpyr231_5
L5_STPC_cADpyr232_1
L5_STPC_cADpyr232_2
L5_STPC_cADpyr232_3
L5_STPC_cADpyr232_4
L5_STPC_cADpyr232_5
L5_TTPC1_cADpyr232_1
L5_TTPC1_cADpyr232_2
L5_TTPC1_cADpyr232_3
L5_TTPC1_cADpyr232_4
L5_TTPC1_cADpyr232_5
L1_NGC-DA_cNAC187_1
L1_NGC-DA_cNAC187_2
L1_NGC-DA_cNAC187_3
L1_NGC-DA_cNAC187_4
L1_NGC-DA_cNAC187_5


objref shplot, soma_point
objref shplot2

// edit_morphology.hoc
// Skip axon[0] convert every section to myelin + node
INL_ratio = 100
INL_ratio_term = 70 // INL ratio for terminations
nodeL = 1
min_myelinL = 20 	// 20 minimum myelinated section length 
min_myelinD = 0.2 	// 0.2 µm (Hildebrand 1993) (max4 used 0.05 µm, should be same as 0.2 b/c of scaling)
min_PMAS = 50 		// minimum premyelin axon segment (PMAS), i.e. axon hillock + initial segment length
myelinL_error = 0.1 // allowed error in myelin length
nodeL_error = 0.1 	// allowed error in node length
max_myelin_order = 0 // max_order - max_myelin_order is max branch order to myelinate. 0 myelinates all branches (same convention as prune_ax)
create Myelin[2], Node[2], Unmyelin[2]
objref iseg_secList, Node_secList, Myelin_secList, Unmyelin_secList, axonal
objref myelinCnts


// stim_wave_import.hoc
objref stim1_amp, stim2_amp, stim_time, curr_amp
objref stim1_amp_norm, stim2_amp_norm
ATTACHED__ = 0


////  threshold_finder.hoc
objref tvec
objref all_ap_times, thresh_cmprt_ap_times, burst_spike_count, thresh_cmprt_filt_ap_times
//objref ap_times_soma, ap_times_term, burst_spike_count, ap_times_all
count_search = 0
max_time = 3600 * 240 // sec
thresh_acc = 0.015  // 1.5%
thresh_high = 2000   // V/m
thresh_low = 0.1	// V/m

////  blocl_threshold_finder.hoc
block_acc = 0.025  // 2.5%
block_high = 6005	// V/m
block_low = 100	// V/m
// init_save_record
numRecord = 0 			// set to 0 if nothing has been run
AP_thresh = 25 			// mV - AP threshold detection in soma
AP_filt_thresh = 25 
AP_thresh_term = -30		// mV - AP threshold detection in axon terminal

firing_rate = 0


objref all_netids, thresh_cmprt_netids //, netids_term, netids_AIS, netids_node, netids_all
objref netcon_tmp, netcon_tmp_thresh //, netcon_tmp_soma // for saving ap times and netids from centers
 // for saving ap times and netids from centers
objref vm_oarray, vm_soma, vm_soma_filt_temp, vm_soma_filt// array of Vm vectors (from x=0.5, 1/section, or every compartment)
//objref section_types, branchorders // used in both init_record_vm() and init_record_vm_more()
//objref secnames[1] 				// for saving secnames, and secnames when recording from multiple points w/in sections

objref run_folder
objref t_file,  vm_file_bin, thresh_file//, secnames_file,
objref all_ap_file, all_netids_file, thresh_cmprt_ap_file, thresh_cmprt_netids_file
//objref ap_soma_file, ap_term_file, ap_all_file, netids_soma_file, netids_all_file, netids_soma_file
//objref sectypes_file_bin, branchorders_file_bin	

// run_stim
objref graph_filt
objref A_HPF, B_HPF, A_BSF, B_BSF
HPF_n = 4
B_HPF = new Vector(HPF_n)
A_HPF = new Vector(HPF_n)
BSF_n = 11
B_BSF = new Vector(BSF_n)
A_BSF = new Vector(BSF_n)

// read filter parameter with dt set in MATLAB
proc load_filters() { localobj coef_name, coef_file
	coef_name = new String()
	sprint(coef_name.s,"Params/%s/B_HPF.txt",run_name.s)
	coef_file = new File() 
	coef_file.ropen(coef_name.s)
	B_HPF.vread(coef_file)
	coef_file.close()
	
	coef_name = new String()
	sprint(coef_name.s,"Params/%s/A_HPF.txt",run_name.s)
	coef_file = new File() 
	coef_file.ropen(coef_name.s)
	A_HPF.vread(coef_file)
	coef_file.close()
	
	
	coef_name = new String()
	sprint(coef_name.s,"Params/%s/B_BSF.txt",run_name.s)
	coef_file = new File() 
	coef_file.ropen(coef_name.s)
	B_BSF.vread(coef_file)
	coef_file.close()
	
	coef_name = new String()
	sprint(coef_name.s,"Params/%s/A_BSF.txt",run_name.s)
	coef_file = new File() 
	coef_file.ropen(coef_name.s)
	A_BSF.vread(coef_file)
	coef_file.close()
	
	
	printf("Read A_HPF, B_HPF, A_BSF, and B_BSF vectors from files.\n")  
}
/* filter parameter with dt = 0.020 ms
B_HPF.x[0] =  0.9875   
B_HPF.x[1] = -2.9625
B_HPF.x[2] =  2.9625
B_HPF.x[3] = -0.9875

A_HPF.x[0] =  1.0000  
A_HPF.x[1] = -2.9749
A_HPF.x[2] =  2.9500
A_HPF.x[3] = -0.9752


B_BSF.x[0] =  0.0319
B_BSF.x[1] = -0.2686
B_BSF.x[2] =  1.0628
B_BSF.x[3] = -2.5924
B_BSF.x[4] =  4.3047
B_BSF.x[5] = -5.0768
B_BSF.x[6] =  4.3047
B_BSF.x[7] = -2.5924
B_BSF.x[8] =  1.0628
B_BSF.x[9] = -0.2686
B_BSF.x[10]=  0.0319

A_BSF.x[0] =  1.0000
A_BSF.x[1] = -3.7064 
A_BSF.x[2] =  5.3394
A_BSF.x[3] = -4.3389
A_BSF.x[4] =  3.2807
A_BSF.x[5] = -2.5147
A_BSF.x[6] =  1.0887
A_BSF.x[7] = -0.2002
A_BSF.x[8] =  0.0959
A_BSF.x[9] = -0.0386
A_BSF.x[10]= -0.0058
*/

/*  fs = 1/dt, dt = 0.020 ms
HPS: 0.1 kHz = 100 Hz
B =	[    0.9875   -2.9625    2.9625   -0.9875]
A = [    1.0000   -2.9749    2.9500   -0.9752]
BSF: 1 kHz & 15 kHz
B =	[    0.0319   -0.2686    1.0628   -2.5924    4.3047   -5.0768    4.3047   -2.5924    1.0628   -0.2686    0.0319 ]
A =	[    1.0000   -3.7064    5.3394   -4.3389    3.2807   -2.5147    1.0887   -0.2002    0.0959   -0.0386   -0.0058]

/*  fs = 1/dt, dt = 0.025 ms. 
HPS: 0.1 kHz = 100 Hz
[B,A] = butter(3,0.1/(fs/2),'high')
B =	[	0.9844   -2.9532    2.9532   -0.9844];
A = [	1.0000   -2.9686    2.9377   -0.9691];

BSF: 1 kHz & 15 kHz
[B,A] = butter(5,[1,15]/(fs/2),'stop')
B = [	0.0069   -0.0472    0.1632   -0.3637    0.5739   -0.6654    0.5739   -0.3637    0.1632   -0.0472    0.0069];
A = [	1.0000   -2.0584   -0.0718    1.6667    0.8556   -1.5367   -0.4906    0.5257    0.2353   -0.0845   -0.0407];
*/